PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = exp1
  keyboardBackend = ioHub
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Routines
  Routine trail
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = TEXT1_video
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 3.0
      text = TEXT1_audio
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    SoundComponent sound_1
      sound = C:/Users/keerb/Downloads/project/project/audio/set_0/beat_en-IN-Standard-C.wav
      startVal [time (s)] = 2.1
      stopVal [duration (s)] = 2
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    KeyboardComponent key_resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 5
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 5
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      text:
        Did you observe latency,
        Press Y for yes, N for no
Flow
  Routine trail
  Routine trail
  Routine trail
  Routine trail
  Routine trail
  Routine trail
  Routine trail
  Routine trail
  Routine trail
  Routine trail
  Routine trail
  Routine trail
